PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'task': 'calib'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = PackagingExperiment
  eyetracker = GazePoint
  gpAddress = 127.0.0.1
  gpPort = 4242
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Routines
  Routine calib_cont
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        timeout = 10
        ave_error = 0.0
        valid_calib_points = 0
      Begin Routine:
        if calibration is not None:
            print(calibration.last)
            ave_error = calibration.last['SUMMARY']['AVE_ERROR']
            valid_calib_points = calibration.last['SUMMARY']['VALID_POINTS']

        calib_query = "Average error is: %f\n\nValid points: %d\n\nRecalibrate (y/n)?" % (ave_error,valid_calib_points)
      End Routine:
        #calib_resp Keyboard component must have set Store: all keys
        if calib_resp is not None and 'n' in calib_resp.keys:
            calib_loop.finished = True
    TextComponent calib_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $calib_query
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    KeyboardComponent calib_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine calib_instr
    TextComponent calib_instr_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        We must first calibrate the eye tracker.

        Keep your eye on the calibration dot but don't anticipate it's movement.

        Press space to continue.
    KeyboardComponent calib_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.
    targetLayout = FIVE_POINTS
    units = from exp settings
  Routine stimulus
    CodeComponent imageSelector
      Code Type = Py
      Begin Experiment:
        Healthy_food = ['stimuli/banana_chips.png', 'stimuli/fruit_cup.png']
        Unhealthy_food = ['stimuli/nacho_chips.png','stimuli/potato_chips.png']
        Random_image = ['stimuli/distractions/watch.jpg', 'stimuli/distractions/shoppingcart.jpg']
      Begin Routine:
        import random
        random.seed()
        image_num = 2
        Image_index = random.randrange(2)

        images = [Healthy_food[Image_index], Unhealthy_food[Image_index], Random_image[Image_index]]
        random.shuffle(images)
    ImageComponent TopLeft
      image [set every repeat] = $images[0]
      pos = (-.33, -.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = pix
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    ImageComponent TopRight
      image [set every repeat] = $images[1]
      pos = (.33, -.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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    ImageComponent Bottom
      image [set every repeat] = $images[2]
      pos = (0, .5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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    EyetrackerRecordComponent etRecord
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      syncScreenRefresh = False
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  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.0
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.0
    targetLayout = FIVE_POINTS
    targetPositions = NINE_POINTS
    units = from exp settings
Flow
  Routine calib_instr
  LoopInitiator calib_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 0
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    EyetrackerCalibrationRoutine calibration
    EyetrackerValidationRoutine validation
    Routine calib_cont
  LoopTerminator calib_loop
  LoopInitiator stimulus_loop loopType="TrialHandler"
    conditionsFile = stim.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('stim', './stimuli/museum_signage_1.jpg')]),
      OrderedDict([('stim', './stimuli/museum_signage_3.jpg')]),
      OrderedDict([('stim', './stimuli/museum_signage_5.jpg')]),
      OrderedDict([('stim', './stimuli/museum_signage_2.jpg')]),
      OrderedDict([('stim', './stimuli/museum_signage_4.jpg')]),
      OrderedDict([('stim', './stimuli/museum_signage_6.jpg')])]
    Routine stimulus
  LoopTerminator stimulus_loop
